PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ArithmeticTest
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Routines
  Routine WelcomeScreen
    TextComponent textWelcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Answer the following questions
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    KeyboardComponent keyWelcome
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank500
    TextComponent Blank2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TrialEasy1
    TextComponent EasyText1
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $EasyProb1
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    KeyboardComponent EasyKey1
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent Timer2
      color = yellow
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10.0
      text [set every frame] = $str(round(timer.getTime(),1))
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(10)
  Routine Blank500_2
    TextComponent Blank3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TrialEasy2
    KeyboardComponent EasyKey2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent EasyText2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $EasyProb2
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    TextComponent Timer3
      color = yellow
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every frame] = $str(round(timer.getTime(),1))
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(10)
  Routine Blank500_3
    TextComponent Blank1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TrialHard
    TextComponent HardProblem
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40.0
      text [set every repeat] = $HardProb
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    KeyboardComponent EndHard
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
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    TextComponent Timer
      color = yellow
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 40.0
      text [set every frame] = $str(round(timer.getTime(),1)) 
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    TextComponent text
      disabled = True
      letterHeight = 0.1
      pos [set every frame] = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40.0
      text [set every frame] = $str(round(routineTimer.getTime(),1)) 
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    TextboxComponent textbox
      anchor = top-right
      bold = False
      disabled = True
      editable = True
      letterHeight = 0.1
      size = 1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40.0
      text [set every frame] = $str(round(routineTimer.getTime(),1)) 
      units = pix
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    CodeComponent Clock
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(40)
  Routine Hard_Answer
    TextComponent HardAnswer
      color = chartreuse
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $HardAns
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  Routine Easy1Answer
    TextComponent EasyAnswer1
      color = chartreuse
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $EasyAns1
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  Routine Easy2Answer
    TextComponent EasyAnswer2
      color = chartreuse
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $EasyAns2
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Flow
  Routine WelcomeScreen
  LoopInitiator RepeatTrial loopType="TrialHandler"
    conditionsFile = ArTest Values.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'HardProb': '42 x 31', 'HardAns': 1302, 'EasyProb1': 'Answer +1', 'EasyAns1': 1303, 'EasyProb2': 'Answer -2', 'EasyAns2': 1301},
      {'HardProb': '57 x 62', 'HardAns': 3534, 'EasyProb1': 'Answer -1', 'EasyAns1': 3533, 'EasyProb2': 'Answer +2', 'EasyAns2': 3535},
      {'HardProb': '71 x 35', 'HardAns': 2485, 'EasyProb1': 'Answer +2', 'EasyAns1': 2487, 'EasyProb2': 'Answer -2', 'EasyAns2': 2485},
      {'HardProb': '86 x 24', 'HardAns': 2064, 'EasyProb1': 'Answer +2', 'EasyAns1': 2066, 'EasyProb2': 'Answer -1', 'EasyAns2': 2065},
      {'HardProb': '65 x 37', 'HardAns': 2405, 'EasyProb1': 'Answer +1', 'EasyAns1': 2406, 'EasyProb2': 'Answer -2', 'EasyAns2': 2404},
      {'HardProb': '47 x 89', 'HardAns': 4183, 'EasyProb1': 'Answer +2', 'EasyAns1': 4185, 'EasyProb2': 'Answer -1', 'EasyAns2': 4184},
      {'HardProb': '83 x 16', 'HardAns': 1328, 'EasyProb1': 'Answer +1', 'EasyAns1': 1329, 'EasyProb2': 'Answer -2', 'EasyAns2': 1327},
      {'HardProb': '13 x 17', 'HardAns': 221, 'EasyProb1': 'Answer -1', 'EasyAns1': 220, 'EasyProb2': 'Answer +2', 'EasyAns2': 222},
      {'HardProb': '45 x 21', 'HardAns': 945, 'EasyProb1': 'Answer +2', 'EasyAns1': 947, 'EasyProb2': 'Answer -2', 'EasyAns2': 945},
      {'HardProb': '27 x 42', 'HardAns': 1134, 'EasyProb1': 'Answer +2', 'EasyAns1': 1136, 'EasyProb2': 'Answer -1', 'EasyAns2': 1135},
      {'HardProb': '75 x 33', 'HardAns': 2475, 'EasyProb1': 'Answer +1', 'EasyAns1': 2476, 'EasyProb2': 'Answer -2', 'EasyAns2': 2474}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
    Routine Blank500_3
    Routine TrialHard
    Routine Blank500
    Routine Hard_Answer
    Routine Blank500
    Routine TrialEasy1
    Routine Blank500
    Routine Easy1Answer
    Routine Blank500_2
    Routine TrialEasy2
    Routine Blank500
    Routine Easy2Answer
  LoopTerminator RepeatTrial
